macro "Batch Processor 9001 Action Tool - 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"
{
Dialog.create("Batch Processor 9001");
Dialog.addMessage("Welcome to the Batch Processor 9001! \n
It will batch process (set contrast/brightness and unmask sharpen) images in your supplied directory. \n
Are your images contained in one directory? (Choose No if they are within subdirectories)");

items = newArray("Yes", "No");
Dialog.addRadioButtonGroup("", items, 2, 2, "Yes");
Dialog.show;

choice = Dialog.getRadioButton;
if(choice == "No"){
	
	dir = getDirectory("Choose a master input Directory"); 
	count = 1; 
	prefix = "BatchProcessor9001-"; 
	listFiles(dir); 

	function listFiles(dir) { 
    	list = getFileList(dir); 
    	for (i=0; i<list.length; i++) { 
        	if (endsWith(list[i], "/")) 
        	    listFiles(""+dir+list[i]); 
        	else { 
        	    print((count++) + ": " + dir + list[i]); 
        	    open(dir + list[i]);
        	    c = 1; 
        	    while (nImages > 0) {
        	        // This is where the actual modification commands live, edit this to your own spec
        	        IJ.redirectErrorMessages();
			        run("RGB Color");
			        run("Brightness/Contrast...");
			        run("Enhance Contrast", "saturated=0.35");
			        run("Close");
			        run("Unsharp Mask...", "radius=1 mask=0.60");
			        saveAs("Tiff", dir + prefix + list[i] + "-" + c + ".tif");
			        close();
        	        c++;
                }
            }
   	 	}
	}
}else if(choice == "Yes"){
	function processImage(input, output, filename) {
	}
	    // This is where the actual modification commands live, edit this to your own spec
	    IJ.redirectErrorMessages();
	    open(input + filename);
	    run("RGB Color");
	    run("Brightness/Contrast...");
	    run("Enhance Contrast", "saturated=0.35");

	    run("Close");
	    run("Unsharp Mask...", "radius=1 mask=0.60");
	    modFilename = "BatchProcessor9001-" + filename;
	    saveAs("Tiff", output + modFilename);
	    close();
	
	};

	input = getDirectory("Choose Input directory");
	output = getDirectory("Choose Output directory");


	setBatchMode(true); 
	imageList = getFileList(input);
	for (i = 0; i<imageList.length; i++)
	processImage(input, output, imageList[i]);
	setBatchMode(false);
	};
}
	
	
